PsychoPy2experiment version="2026.1.3"
Settings
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': 'XXX'}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Show info dlg = False
  Units = norm
  Window size (pixels) = [1600, 900]
  color = black
  expName = stroop_complex
  keyboardBackend = PsychToolbox
  logging level = warning
  runMode = 1
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Routines
  Routine thanks
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    TextComponent thanksText
      color = $[1, 1, 1]
      font = arial
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        This is the end of the experiment.

        Thanks!
  Routine trial
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    TextComponent Colorword
      color [set every repeat] = $letterColor
      letterHeight = 0.2
      pos = [0, 0.5]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.75
      text [set every repeat] = $colorword
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    TextComponent Whiteword
      letterHeight = 0.2
      pos = (0, -0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.75
      text [set every repeat] = $blackword
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    KeyboardComponent resp
      allowedKeys = 'q','p'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.75
      storeCorrect = True
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  Routine Prac
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    TextComponent ColorWordP
      color [set every repeat] = $letterColor
      letterHeight = 0.2
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.75
      text [set every repeat] = $colorword
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    TextComponent WhiteWordP
      letterHeight = 0.2
      pos = (0, -0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.75
      text [set every repeat] = $blackword
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    KeyboardComponent key_resp
      allowedKeys = 'q','p'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.75
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  Routine feedback
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    TextComponent text_5
      color = orange
      letterHeight = 0.15
      pos = (0, 0.25)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
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      text [set every repeat]:
        $corrAns
    TextComponent text_6
      letterHeight = 0.15
      pos = (0, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
      text [set every repeat] = Correct answer
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    TextComponent text_7
      color = orange
      letterHeight = 0.15
      pos = (0, -0.25)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
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      text [set every repeat]:
        $key_resp.keys
    TextComponent text_8
      letterHeight = 0.15
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
      text = Your answer
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  Routine Presenter_Ins
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    TextComponent instrText
      color = $[1, 1, 1]
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text:
        Presenter
        Please Test LSL Connection

        Press space to continue
    KeyboardComponent ready
      allowedKeys = "space"
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet # import required classes
        info = StreamInfo(name='Trigger', type='Markers', channel_count=1, channel_format='int32', source_id='Example') # sets variables for object info
        outlet = StreamOutlet(info) # initialize stream.
  Routine Participant_Ins_1
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    KeyboardComponent MoveOn
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.11
      startVal [time (s)] = 0.0
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      text:
        Participant:
        On each screen, Answer:

        Do the colors of the top letters
        match the meaning of the bottom word?

        q (yes)          p (no)

        Press Space to Continue
  Routine Participant_Ins_2
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    KeyboardComponent Moveon2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent PI_2
      letterHeight = 0.1
      pos = (0, 0.70)
      startVal [time (s)] = 0.0
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      text:
        E.g.: Do the colors of the top letters
        match the meaning of the bottom word?
    TextComponent text
      color = blue
      letterHeight = 0.2
      pos = (0.25, 0.4)
      startVal [time (s)] = 0.0
      text = green
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    TextComponent text_3
      color = blue
      letterHeight = 0.2
      pos = (-0.25, 0.4)
      startVal [time (s)] = 0.0
      text = red
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    TextComponent text_4
      letterHeight = 0.2
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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      text:
        red          blue

        no           yes
  Routine Participant_Ins_3
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    TextComponent PI_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        You will now practice 10 times

        The stimuli will last for less than 2 sec
        Try to respond before the screen dissapears

        q (yes)    p (no)


        Press Space to Continue
    KeyboardComponent MoveOn3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BeginTrials
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    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        We will now begin the trials

        They will appear in blocks

        Stare at + sign in between trial blocks

        Press space when ready
    KeyboardComponent Moveon4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Rest
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    TextComponent Rest1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rest
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  Routine Rest_2
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    TextComponent Rest_
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = +
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  Routine Trigger
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        outlet.push_sample(x=[congruent])
Flow
  Routine Presenter_Ins
  Routine Participant_Ins_1
  Routine Participant_Ins_2
  Routine Participant_Ins_3
  LoopInitiator Practice loopType="TrialHandler"
    conditionsFile = TrialTypes_All.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('blackword', 'red'), ('colorword', 'XXX'), ('letterColor', 'red'), ('corrAns', 'left (yes)'), ('congruent', 1)]),
      OrderedDict([('blackword', 'blue'), ('colorword', 'XXX'), ('letterColor', 'red'), ('corrAns', 'right (no)'), ('congruent', 1)]),
      OrderedDict([('blackword', 'blue'), ('colorword', 'XXX'), ('letterColor', 'blue'), ('corrAns', 'left (yes)'), ('congruent', 1)]),
      OrderedDict([('blackword', 'green'), ('colorword', 'XXX'), ('letterColor', 'blue'), ('corrAns', 'right (no)'), ('congruent', 1)]),
      OrderedDict([('blackword', 'green'), ('colorword', 'XXX'), ('letterColor', 'green'), ('corrAns', 'left (yes)'), ('congruent', 1)]),
      OrderedDict([('blackword', 'red'), ('colorword', 'XXX'), ('letterColor', 'green'), ('corrAns', 'right (no)'), ('congruent', 1)]),
      OrderedDict([('blackword', 'red'), ('colorword', 'blue'), ('letterColor', 'red'), ('corrAns', 'left (yes)'), ('congruent', 2)]),
      OrderedDict([('blackword', 'green'), ('colorword', 'green'), ('letterColor', 'red'), ('corrAns', 'right (no)'), ('congruent', 2)]),
      OrderedDict([('blackword', 'blue'), ('colorword', 'red'), ('letterColor', 'blue'), ('corrAns', 'left (yes)'), ('congruent', 2)]),
      OrderedDict([('blackword', 'red'), ('colorword', 'green'), ('letterColor', 'blue'), ('corrAns', 'right (no)'), ('congruent', 2)]),
      OrderedDict([('blackword', 'green'), ('colorword', 'blue'), ('letterColor', 'green'), ('corrAns', 'left (yes)'), ('congruent', 2)])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
    Routine Prac
    Routine feedback
  LoopTerminator Practice
  Routine BeginTrials
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ConditionFile.xlsx
    endPoints = [1, 2]
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('Condition_File', 'TrialTypes_Incongruent.xlsx')]),
      OrderedDict([('Condition_File', 'TrialTypes_Neutral.xlsx')])]
    Routine Trigger
    LoopInitiator trials_Loop loopType="TrialHandler"
      conditionsFile = $Condition_File
      loopType = random
      nReps = 1
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      Routine trial
    LoopTerminator trials_Loop
    Routine Rest_2
  LoopTerminator trials
  Routine thanks
